OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario allows to quickly replay
  an online session recorded file. The
  main difference between this scenario and
  scenario 3-online is basically
  all the acquisition / stimulation part
  being replaced by a file reader.

  Note: refer to scenario 3-online for
  details about the processing.

Generic stream reader => #0
  Filename = C:/Users/janru/OneDrive/Dokumenty/GitHub/ZSWI_EEG/TrenovanaData/lhoe/lhoeConvert.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Reference Channel
  Channel = Fp2
  Channel Matching Method = Smart
-> Channel Selector "Fp1;F3;F4;C3;C4;P3;P4;O1;O2;F7;F8;T3;T4;T5;T6;Fz;Cz;Pz;EOG"
  Channel List = Fp1;F3;F4;C3;C4;P3;P4;O1;O2;F7;F8;T3;T4;T5;T6;Fz;Cz;Pz;EOG
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;
  Number of Output Channels = 2
  Number of Input Channels = 19
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = C:/Users/janru/OneDrive/Dokumenty/GitHub/ZSWI_EEG/TrenovanaData/lhoe/lhoeTrainer.cfg
#11.Hyperplane distance -> Simple DSP => #12
  Equation = x
-> Level measure
#12 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Amplitude=#12 -> Graz visualization
  Show instruction = true
  Show feedback = false
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 1
  Positive feedback only = false
Data=#1.Output stream 1, Stimulations=#1.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
