OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  This scenario is an example of
  how to convert files between formats.

  Conversion may not work correctly for all
  possible input and output combinations.

  You may have to customize the scenario
  to your particular case.

  If you run this scenario manually from Designer,
  please configure the input and output filenames
  of the reader and writer boxes.

  Script 'openvibe-convert' relies on this scenario.

Brainamp file reader => #0
  Filename (header) = C:/Users/jfs/Downloads/ZSWI_EEG-master/ZSWI_EEG-master/DataSet/rhoemi/fbrhoemi.vhdr
  Epoch size (in sec) = 0.0625
  Convert stimuli to OpenViBE labels = true
Data=#0.EEG stream, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 2=#0.EEG stream, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = C:/Users/jfs/Desktop/temp/import2.ov
  Use compression = false

Timeout
  Timeout delay = 500
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
