OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  ----------------- Trenovaci scenar ------------------

  soubory [ov]

  pokud je presnost cross validace mensi nez [65%] nema cenu pokracovat testovanim

  Menit pouze nazev vstupniho souboru
Comment
  Matice zvysuje vahu kanalu pri vyhodnocovani
Comment
  vytvari data pro urceni pohybu
  0.5s po signalu nahrava 1s eeg do vectoru
  pokud se budou menit offset nebo cas
  nahravani je potreba upravit i testing.xml
Comment
  vytvari data pro urceni klidu
  5s po signalu nahrava 2s eeg do vectoru
  pokud se budou menit offset nebo cas
  nahravani je potreba upravit i testing.xml
  5s po signalu pocitam s tim ze clovek je uz v klidovem
  stavu da se upravit
  *pred signalem (zaporny offset)
  *delsi dobu po signalu (pozor na prekryvani)
  * delku bych neupravoval zanese to vetsi chybu
Comment
  delka uceni
  osvedcilo se
  500s

Generic stream reader => #0
  Filename = C:/Users/jfs/Desktop/temp/import.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Reference Channel
  Channel = Fp2
  Channel Matching Method = Smart
-> Channel Selector "C3;P3;F3;C4;P4;F4;Pz;Fz;Cz"
  Channel List = C3;P3;F3;C4;P4;F4;Pz;Fz;Cz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;-1;-1;4;-1;-1;-2;-2;0
  Number of Output Channels = 1
  Number of Input Channels = 9
  Filter matrix file =
-> Temporal filter => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
Input stream 1=#5, Input stream 2=#1.Output stream 2 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_01
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x/2
-> Feature aggregator => #10
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 5
  Stimulation to epoch from = OVTK_StimulationId_Label_01
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x/2
-> Feature aggregator => #14
Timeout => #15
  Timeout delay = 250
  Output Stimulation = OVTK_StimulationId_Label_08
Stimulations=#15, Features for class 1=#10, Features for class 2=#14 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Label_08
  Filename to save configuration to = C:/Users/jfs/Desktop/train.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Arm_Movement
  Class 2 label = OVTK_GDF_Feedback_Continuous
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
