OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Overview

  This scenario allows to quickly replay
  an online session recorded file. The
  main difference between this scenario and
  scenario 3-online is basically
  all the acquisition / stimulation part
  being replaced by a file reader.

  Note: refer to scenario 3-online for
  details about the processing.

Generic stream reader => #0
  Filename = C:/Users/jfs/Desktop/temp/import.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Reference Channel
  Channel = Fp2
  Channel Matching Method = Smart
-> Channel Selector "C3;P3;F3;C4;P4;F4;Pz;Fz;Cz"
  Channel List = C3;P3;F3;C4;P4;F4;Pz;Fz;Cz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;-1;-1;4;-1;-1;-2;-2;0
  Number of Output Channels = 1
  Number of Input Channels = 9
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x/2
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = C:/Users/jfs/Desktop/train.cfg
#11.Probability values -> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 10
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#1.Output stream 1 -> Reference Channel
  Channel = Fp2
  Channel Matching Method = Smart
-> Channel Selector "C3;P3;F3;C4;P4;F4;Pz;Fz;Cz"
  Channel List = C3;P3;F3;C4;P4;F4;Pz;Fz;Cz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;-1;-1;4;-1;-1;-2;-2;0
  Number of Output Channels = 1
  Number of Input Channels = 9
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x/2
-> Feature aggregator => #20
Features=#20 -> Classifier processor => #21
  Filename to load configuration from = C:/Users/jfs/Desktop/train.cfg
#21.Probability values -> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 10
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#1.Output stream 1 -> Simple DSP => #24
  Equation = 0
Data=#24, Stimulations=#1.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
